WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindTelekinesisDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindTelekinesisDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindTelekinesisDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindTelekinesisDataSchema.Rig.AindTelekinesisRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindTelekinesisDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindTelekinesisDataSchema.TaskLogic.AindTelekinesisTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    SubscribeSubject HarpLoadCellsEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
    -> BehaviorSubject HarpTimestampSource

    GroupWorkflow HarpDevices
        SubscribeSubject StartExperiment
        -> Unit
        -> PublishSubject TriggerHarpReadDump

        GroupWorkflow HarpLoadCellsDevice
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpLoadCellsCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpLoadCells.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.LoadCells.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)
            -> PublishSubject HarpLoadCellsEvents

            SubscribeSubject HarpLoadCellsEvents
            -> Take(Count=1)
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateEnableEventsPayload(EnableEvents=LoadCellData))
            -> MulticastSubject HarpLoadCellsCommands
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateAcquisitionStatePayload(AcquisitionState=Enabled))
            -> MulticastSubject HarpLoadCellsCommands

            ExternalizedMapping(Name(DisplayName=TriggerHarpReadDumpSubjectName))
            -> SubscribeSubject TriggerHarpReadDump
            -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> MulticastSubject HarpLoadCellsCommands

            GroupWorkflow LoadCellsCalibration
                BehaviorSubject<System.Reactive.Unit> CalibrateLoadCells
                -> BooleanProperty(Value=true)
                -> MulticastSubject CalibratingLoadCells
                -> CreateObservable CalibrateLoadCells
                    Range(Start=0, Count=8)
                    -> CreateObservable CalibrateLoadCellOffset
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject LoadCellIndex

                        SubscribeSubject LoadCellIndex
                        -> Add(Operand=IntProperty(Value=48))
                        -> Take(Count=1)
                        -> AsyncSubject OffsetAddress

                        BehaviorSubject<System.Int32> WriteOffset => #7
                        SubscribeSubject OffsetAddress
                        -> PropertyMapping(Address) => #9
                        #7, #9 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=55, PayloadType=S16))
                        -> MulticastSubject HarpLoadCellsCommands

                        ExternalizedMapping(Value(DisplayName=BufferSize))
                        -> IntProperty(Value=100)
                        -> Take(Count=1)
                        -> AsyncSubject BufferSize

                        IntProperty(Value=0)
                        -> BehaviorSubject CurrentOffset

                        SubscribeSubject CurrentOffset
                        -> SelectMany AcquireOffset => #19
                            WorkflowInput<System.Int32> Source1
                            -> Take(Count=1)
                            -> AsyncSubject ThisOffset

                            SubscribeSubject HarpLoadCellsEvents
                            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #4
                            SubscribeSubject OffsetAddress
                            -> PropertyMapping(Address) => #6
                            #4, #6 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=55, PayloadType=S16, IsArray=false))
                            -> BehaviorSubject OffsetSet

                            SubscribeSubject ThisOffset
                            -> Delay(DueTime=PT0.05S)
                            -> MulticastSubject WriteOffset

                            SubscribeSubject ThisOffset => #12
                            SubscribeSubject HarpLoadCellsEvents
                            -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
                            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=S16, IsArray=true)) => #15
                            SubscribeSubject LoadCellIndex
                            -> PropertyMapping(Value) => #17
                            #15, #17 -> Index(Operand=IntProperty(Value=7)) => #18
                            SubscribeSubject BufferSize
                            -> PropertyMapping(Count) => #20
                            #18, #20 -> Take(Count=100)
                            -> Sum => #22
                            SubscribeSubject BufferSize
                            -> PropertyMapping(Value) => #24
                            #22, #24 -> Divide(Operand=IntProperty(Value=100)) => #25
                            SubscribeSubject OffsetSet => #26
                            #25, #26 -> SubscribeWhen => #27
                            #12, #27 -> Zip
                            -> Take(Count=1)
                            -> WorkflowOutput
                        SubscribeSubject CurrentOptimum => #20
                        #19, #20 -> WithLatestFrom => #21
                        -> Condition BetterThanLast?
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Item1.Item2)
                            -> Bonsai.Dsp.Abs => #2
                            #0 -> MemberSelector(Selector=Item2.Item2)
                            -> Bonsai.Dsp.Abs => #4
                            #2, #4 -> Zip
                            -> LessThan
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Item1)
                        -> MulticastSubject CurrentOptimum
                        -> SelectMany Offset++
                            SubscribeSubject CurrentOffset
                            -> Take(Count=1) => #1
                            SubscribeSubject IncrementOffset
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: it? 1.0 : -1.0
                            -> PropertyMapping(Value) => #4
                            #1, #4 -> Add(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        -> MulticastSubject CurrentOffset
                        -> BooleanProperty(Value=true) => #27
                        #21 -> Condition WorseThanLast
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Item1.Item2)
                            -> Bonsai.Dsp.Abs => #2
                            #0 -> MemberSelector(Selector=Item2.Item2)
                            -> Bonsai.Dsp.Abs => #4
                            #2, #4 -> Zip
                            -> LessThan
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> BooleanProperty(Value=false)
                        -> SelectMany !IncrementOffset
                            SubscribeSubject IncrementOffset
                            -> Take(Count=1)
                            -> BitwiseNot
                            -> MulticastSubject IncrementOffset
                            -> WorkflowOutput
                        -> SelectMany Offset++
                            SubscribeSubject IncrementOffset
                            -> Take(Count=1)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: it? 1.0 : -1.0
                            -> WorkflowOutput
                        -> MulticastSubject CurrentOffset
                        -> Take(Count=2)
                        -> Last
                        -> BooleanProperty(Value=false) => #35
                        #27, #35 -> Merge
                        -> BitwiseNot
                        -> Condition => #38
                            WorkflowInput Source1
                            -> WorkflowOutput
                        SubscribeSubject CurrentOptimum => #39
                        #38, #39 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #41
                        SubscribeSubject LoadCellIndex => #42
                        #41, #42 -> Zip
                        -> MemberSelector(Selector="Item1.Item1,Item1.Item2,Item2")
                        -> Take(Count=1)
                        -> WorkflowOutput

                        IntProperty(Value=-1000) => #47
                        IntProperty(Value=100000) => #48
                        #47, #48 -> Zip
                        -> BehaviorSubject CurrentOptimum

                        BooleanProperty(Value=true)
                        -> BehaviorSubject IncrementOffset
                    -> Concat
                    -> ToList
                    -> ParseLoadCellsCalibration
                    -> WorkflowOutput
                -> Switch => #4
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=HarpLoadCells.Calibration.Output)
                -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
                -> MemberSelector(Selector=Channels)
                -> ParseLoadCellsCalibration => #9
                #4, #9 -> Merge
                -> BehaviorSubject LoadCellsCalibration
                -> BooleanProperty(Value=false)
                -> MulticastSubject CalibratingLoadCells => #13
                SubscribeSubject HarpLoadCellsEvents
                -> Take(Count=1) => #15
                #13, #15 -> SubscribeWhen

                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> BehaviorSubject CalibratingLoadCells

                SubscribeSubject LoadCellsCalibration
                -> SelectMany SetLoadCellOffset
                    WorkflowInput Source1
                    -> Merge => #1
                    -> MemberSelector(Selector=LoadCellIndex)
                    -> Add(Operand=IntProperty(Value=48)) => #3
                    #1 -> MemberSelector(Selector=Offset) => #4
                    #3, #4 -> Zip
                    -> InputMapping(Selector=Item2, Address(Selector=Item1))
                    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=48, PayloadType=S16))
                    -> MulticastSubject HarpLoadCellsCommands
                    -> LastOrDefault
                    -> BooleanProperty(Value=true)
                    -> WorkflowOutput

        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #16
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #19
        #16, #19 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindTelekinesisDataSchema.Rig.SerializeToJson
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #26
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #30
        #26, #30 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpEnvironmentSensor.bonsai, PortName=COMx) => #35
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #38
        #35, #38 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                #5, #8 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #9
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #10
                #9, #10 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #12
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #14
                #12, #14 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

    GroupWorkflow Networking
        SubscribeSubject SoftwareEvents
        -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Networking.ZmqPublisher)
        -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #4
        #1, #4 -> Bonsai.ZeroMQ.Publisher(ConnectionString=@tcp://localhost:5556, Topic=telekinesis)
        -> WorkflowOutput

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),AindTelekinesisDataSchema.TaskLogic.Action)> LiveHarvestOutcome
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<OpenCV.Net.Mat> CurrentLut
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TrialNumber

    SubscribeSubject TrialNumber
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialNumber)
    -> MulticastSubject SoftwareEvents

    BooleanProperty(Value=false)
    -> Take(Count=1) => #15
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #18
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #21
    #15, #18, #21 -> Merge
    -> BehaviorSubject ExperimentState

GroupWorkflow HardwareChecks
    Defer ProtocolValidation => #0
        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #3
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        IncludeWorkflow(Path=Extensions\ValidateHarpClkOutput.bonsai)
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

GroupWorkflow OperationControl
    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #9
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #14
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #15
        #14, #15 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #25
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvents

    GroupWorkflow LickometerControl
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> DistinctUntilChanged
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #5, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #1
        SubscribeSubject TriggeredCamerasReady => #2
        #1, #2 -> Zip
        -> Take(Count=1)
        -> Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #13
        #10, #13 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=1))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

        BehaviorSubject<System.Reactive.Unit> TriggerResponseCue
        -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=300)

        BehaviorSubject<System.Boolean> TriggerFeedbackCue
        -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=1000)

        BehaviorSubject<System.Reactive.Unit> TriggerQuiescencePeriodCue
        -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=500)

    GroupWorkflow BehaviorAnalogInput
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #1
        -> MemberSelector(Selector=Value)
        -> MemberSelector(Selector="AnalogInput0,AnalogInput1") => #3
        #1 -> MemberSelector(Selector=Seconds) => #4
        #3, #4 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject AnalogInputData

    GroupWorkflow LoadCells
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true))
        -> PublishSubject RawLoadCellData => #3
        SubscribeSubject LoadCellsCalibration
        -> PropertyMapping(Calibration) => #5
        #3, #5 -> ApplyLoadCellsCalibration
        -> PublishSubject CalibratedLoadCellData

    GroupWorkflow ContinuousFeedback
        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> BehaviorSubject ContinuousFeedbackEnabled

        AindTelekinesisDataSchema.TaskLogic.ContinuousFeedback => #3
        IntProperty(Value=0)
        -> CreateObservable => #5
            DoubleProperty(Value=0)
            -> WorkflowOutput
        #3, #5 -> Zip
        -> IgnoreElements
        -> BehaviorSubject ContinuousFeedbackProcess

        SubscribeSubject ContinuousFeedbackProcess
        -> MemberSelector(Selector=Item1)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ContinuousFeedbackProcess)
        -> MulticastSubject SoftwareEvents

        SubscribeSubject ContinuousFeedbackProcess => #13
        -> MemberSelector(Selector=Item1)
        -> AindTelekinesisDataSchema.TaskLogic.MatchContinuousFeedback(Type=TypeMapping<AindTelekinesisDataSchema.TaskLogic.ManipulatorFeedback>) => #15
        #13 -> MemberSelector(Selector=Item2) => #16
        #15, #16 -> WithLatestFrom
        -> CreateObservable ContinuousFeedbackMotorSolver
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject thisFeedback

            SubscribeSubject thisFeedback
            -> MemberSelector(Selector=Item1)
            -> AsyncSubject deviceFeedback

            SubscribeSubject thisFeedback
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject feedbackSource

            SubscribeSubject thisFeedback
            -> IncludeWorkflow(Path=Extensions\InterpolateContinuousFeedback.bonsai)
            -> PublishSubject interpolatedFeedback

            SubscribeSubject interpolatedFeedback
            -> MulticastSubject SpoutPosition => #13
            SubscribeSubject ContinuousFeedbackEnabled
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BehaviorSubject endFeedback => #16
            #13, #16 -> TakeUntil

            SubscribeSubject endFeedback => #18
            SubscribeSubject interpolatedFeedback => #19
            #18, #19 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject SpoutPosition
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

    GroupWorkflow SpoutControl
        SubscribeSubject SpoutPosition
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=AdditionalSettings)
        -> MemberSelector(Selector=SpoutAxis)
        -> InputMapping(Value(Selector=value__))
        -> PropertySource<AllenNeuralDynamics.AindManipulator.AxisConfiguration,AllenNeuralDynamics.AindManipulator.Axis>(MemberName=Axis, Value=None) => #7
        BehaviorSubject<System.Single> SpoutPosition => #8
        Timer(DueTime=PT0S, Period=PT0.05S) => #9
        #8, #9 -> Gate
        -> DistinctUntilChanged
        -> Bonsai.Scripting.Expressions.ExpressionTransform "double(it)" => #12
          Expression: double(it)
        #7, #12 -> CombineLatest => #13
        GroupWorkflow GetCalibration
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=Calibration)
            -> MemberSelector(Selector=Input)
            -> AindTelekinesisDataSchema.Rig.SerializeToJson
            -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>)
            -> WorkflowOutput
        -> PropertyMapping(Calibration) => #15
        #13, #15 -> AllenNeuralDynamics.AindManipulator.ManipulatorSiUnitConverter(ConverterMode=MmToStep) => #16
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=AdditionalSettings)
        -> MemberSelector(Selector=SpoutAxis)
        -> PropertyMapping(Axis) => #21
        #16, #21 -> MoveAbsoluteSingleAxis(Axis=Y1, MessageType=Write)
        -> MulticastSubject StepperDriverCommands

        BehaviorSubject<System.Boolean> ForceSpoutAvailability => #24
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Spout) => #26
        #24, #26 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 ? Item2.DefaultExtendedPosition : Item2.DefaultRetractedPosition
        -> MulticastSubject SpoutPosition => #29
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Spout)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #33
            WorkflowInput Source1
            -> WorkflowOutput
        #29, #33 -> SubscribeWhen

    GroupWorkflow LutLogic
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.ActionLuts)
        -> Take(Count=1)
        -> Merge
        -> SelectMany LoadLuts
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject thisLut

            SubscribeSubject thisLut
            -> MemberSelector(Selector=Value)
            -> SelectMany LoadImage => #5
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject this

                SubscribeSubject this
                -> MemberSelector(Selector=Path)
                -> PropertyMapping(FileName)
                -> Bonsai.Vision.LoadImage(Mode=Unchanged)
                -> WorkflowOutput
            SubscribeSubject thisLut
            -> PropertyMapping(Scale(Selector=Value.Scale), Shift(Selector=Value.Offset)) => #7
            #5, #7 -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=1, Shift=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.ConvertToMat => #10
            SubscribeSubject thisLut => #11
            #10, #11 -> WithLatestFrom
            -> Take(Count=1)
            -> WorkflowOutput
        -> ToDictionary(KeySelector=Item2.Key, ElementSelector="Item1,Item2")
        -> AsyncSubject ActionLuts

        BehaviorSubject<AindTelekinesisDataSchema.TaskLogic.Trial> ActiveTrial
        -> CreateObservable ParseAction
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject trial

            SubscribeSubject ActionLuts => #3
            SubscribeSubject trial
            -> MemberSelector(Selector=LutReference)
            -> PropertyMapping(Value) => #6
            #3, #6 -> Index(Operand=StringProperty)
            -> Take(Count=1)
            -> AsyncSubject lutFactory
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject CurrentLut

            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource0)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #14
            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource1)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #17
            GroupWorkflow NullAction1
                SubscribeSubject trial
                -> MemberSelector(Selector=ActionSource1)
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == null
                -> DoubleProperty(Value=NaN) => #3
                -> DoubleProperty(Value=0) => #4
                #3, #4 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> WorkflowOutput
            -> Take(Count=1) => #19
            #17, #19 -> Merge => #20
            #14, #20 -> WithLatestFrom => #21
            -> MemberSelector(Selector="Item1.Value,Item2.Value") => #22
            #21 -> MemberSelector(Selector=Item1.Seconds) => #23
            #22, #23 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #25
            SubscribeSubject lutFactory
            -> MemberSelector(Selector=Item1)
            -> PropertyMapping(LookUpTable) => #28
            SubscribeSubject lutFactory
            -> MemberSelector(Selector=Item2.Value)
            -> PropertyMapping(LutSettings) => #31
            #25, #28, #31 -> ParseAction
            -> WorkflowOutput
        -> Switch
        -> PublishSubject CurrentActionVector => #10
        SubscribeSubject ActionLuts => #11
        #10, #11 -> SubscribeWhen

    GroupWorkflow OphysInterface
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=OphysInterface)
        -> IncludeWorkflow(Path=Extensions\IsNull.bonsai)
        -> BehaviorSubject SkipOphysInterfaceHandshake

        BehaviorSubject<System.Reactive.Unit> StartOphysInterface
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0)) => #5
        BehaviorSubject<System.Reactive.Unit> StopOphysInterface
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1)) => #7
        #5, #7 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> SelectMany ConfigurePulse
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort1Payload(PulseDOPort1=1))
            -> Take(Count=1) => #1
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort0Payload(PulseDOPort0=10))
            -> Take(Count=1) => #3
            #1, #3 -> Merge => #4
            Annotation "Ensure pulse mode"(Text="") => #5
            #4, #5 -> MulticastSubject HarpBehaviorCommands
            -> Last
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject StopOphysInterface
        -> SelectMany GetReadyState => #15
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> Harp.Behavior.CreateMessage(MessageType=Read, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #17
        #15 -> MemberSelector(Selector=Seconds) => #18
        #17, #18 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> MemberSelector(Selector=Value)
        -> Take(Count=1)
        -> BehaviorSubject IsReadyOphysInterface

        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #25
        -> MemberSelector(Selector=Value) => #26
        ExternalizedMapping(Value(DisplayName=OphysStrobePin)) => #27
        #26, #27 -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> DistinctUntilChanged
        -> Condition => #30
            WorkflowInput Source1
            -> WorkflowOutput
        #25 -> MemberSelector(Selector=Seconds) => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject OphysFrameStrobe

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> GroupWorkflow PermutateBlocks
        WorkflowInput Source1
        -> MemberSelector(Selector=Environment) => #1
        -> Condition Shuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #4
        SubscribeSubject RngSeed => #5
        #4, #5 -> Bonsai.Numerics.Permutation => #6
        #1 -> Condition DontShuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #9
        #6, #9 -> Merge
        -> ToList
        -> WorkflowOutput
    -> AsyncSubject BlockStatistics

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject BlockIndex

    SubscribeSubject BlockStatistics => #6
    SubscribeSubject BlockIndex
    -> PropertyMapping(Value) => #8
    #6, #8 -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> BehaviorSubject ActiveBlock
    -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ActiveBlock)
    -> IncludeWorkflow(Path=Extensions\BlockLogic.bonsai)
    -> Last
    -> SelectMany BlockIndex++
        SubscribeSubject BlockIndex
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject BlockIndex
        -> WorkflowOutput
    -> Repeat
    -> TakeWhile
        SubscribeSubject BlockIndex
        -> Add(Operand=IntProperty(Value=1)) => #1
        SubscribeSubject BlockStatistics
        -> MemberSelector(Selector=Count) => #3
        #1, #3 -> CombineLatest
        -> LessThanOrEqual
        -> WorkflowOutput
    -> WorkflowOutput
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

Defer Logging => #14
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Behavior, HarpDeviceName=Behavior)

            SubscribeSubject HarpAnalogInputEvents => #4
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #6
            #4, #6 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=AnalogInput, HarpDeviceName=AnalogInput)

            SubscribeSubject HarpLoadCellsEvents => #8
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #10
            #8, #10 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=LoadCells, HarpDeviceName=LoadCells)

            SubscribeSubject HarpLickometerEvents => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            #12, #14 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Lickometer, HarpDeviceName=LicketySplit)

            SubscribeSubject HarpClockGenEvents => #16
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #18
            #16, #18 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

            SubscribeSubject StepperDriverEvents => #20
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #22
            #20, #22 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=StepperDriver
              HarpDeviceName=StepperDriver

            SubscribeSubject HarpEnvironmentSensorEvents => #24
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #26
            #24, #26 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=EnvironmentSensor
              HarpDeviceName=EnvironmentSensor

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #3
            SubscribeSubject HarpSeconds => #4
            #3, #4 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/Behavior
              HarpDeviceName=Behavior

            SubscribeSubject StepperDriverCommands => #10
            SubscribeSubject HarpSeconds => #11
            #10, #11 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #13
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #15
            #13, #15 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/StepperDriver
              HarpDeviceName=StepperDriver

            SubscribeSubject HarpLoadCellsCommands => #17
            SubscribeSubject HarpSeconds => #18
            #17, #18 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #20
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #22
            #20, #22 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/LoadCells
              HarpDeviceName=LoadCells

            SubscribeSubject HarpLickometerCommands => #24
            SubscribeSubject HarpSeconds => #25
            #24, #25 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #27
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #29
            #27, #29 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/Lickometer
              HarpDeviceName=LicketySplit

            SubscribeSubject HarpClockGenCommands => #31
            SubscribeSubject HarpSeconds => #32
            #31, #32 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #34
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #36
            #34, #36 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

            SubscribeSubject HarpAnalogInputCommands => #38
            SubscribeSubject HarpSeconds => #39
            #38, #39 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #41
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #43
            #41, #43 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/AnalogInput
              HarpDeviceName=AnalogInput

            SubscribeSubject HarpEnvironmentSensorCommands => #45
            SubscribeSubject HarpSeconds => #46
            #45, #46 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #48
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #50
            #48, #50 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/EnvironmentSensor
              HarpDeviceName=EnvironmentSensor

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Annotations)
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #13
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #15
            #13, #15 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #18
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #20
            #18, #20 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject LoadCellsCalibration
                -> Merge
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LoadCellCalibratio)
                -> MulticastSubject SoftwareEvents

        Defer OperationControl
            StringProperty(Value=OperationControl)
            -> Take(Count=1)
            -> AsyncSubject deviceName

            Disable SubscribeSubject CurrentLut
            -> Disable MemberSelector(Selector=Item2) => #4
            Disable SubscribeSubject Modality
            -> Disable PropertyMapping(Modality) => #6
            Disable SubscribeSubject deviceName
            -> Disable PropertyMapping(DeviceName) => #8
            Annotation FIXME(Text=https://github.com/AllenNeuralDynamics/Aind.Behavior.Telekinesis/issues) => #9
            #4, #6, #8, #9 -> Disable IncludeWorkflow(Path=Extensions\LogImage.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=Lut, DeviceName="")

            SubscribeSubject SpoutPosition => #11
            SubscribeSubject HarpTimestampSource
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #13
            #11, #13 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #15
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #17
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #19
            #15, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=SpoutPosition, DeviceName=nil)

            SubscribeSubject CurrentActionVector => #21
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #23
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #25
            #21, #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=CurrentActionVector, DeviceName="")

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl)
            -> MemberSelector(Selector=ActionLuts)
            -> Merge => #30
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #32
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #34
            #30, #32, #34 -> SelectMany CopyImage
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject value

                SubscribeSubject value => #3
                ExternalizedMapping(Name(DisplayName=SubjectName))
                -> SubscribeSubject LoggingRootPath => #5
                ExternalizedMapping(Modality) => #6
                #5, #6 -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=nil) => #7
                SubscribeSubject value
                -> MemberSelector(Selector=Key) => #9
                ExternalizedMapping(Value(DisplayName=DeviceName))
                -> StringProperty(Value="") => #11
                #9, #11 -> Zip
                -> Take(Count=1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #14
                  Expression: new(Item1 as LogName, Item2 as DeviceName)
                #7, #14 -> Zip
                -> Format(Format={0}/{1}/{2}.tiff, Selector="Item1,Item2.DeviceName,Item2.LogName")
                -> PropertyMapping(DestinationPath) => #17
                SubscribeSubject value
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Path)
                -> PropertyMapping(SourcePath) => #21
                #3, #17, #21 -> CopyFile(Overwrite=false)

        Defer Logs
            StringProperty(Value=Logs)
            -> Take(Count=1)
            -> AsyncSubject DeviceName

            GroupWorkflow ConfigSchemaLogging
                SubscribeSubject SubjectSchema
                -> AindTelekinesisDataSchema.Session.SerializeToJson => #1
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #3
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #5
                #1, #3, #5 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=session_output)

                SubscribeSubject TaskLogicSchema
                -> AindTelekinesisDataSchema.TaskLogic.SerializeToJson => #8
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #10
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_output)

                SubscribeSubject RigSchema
                -> AindTelekinesisDataSchema.Rig.SerializeToJson => #15
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #17
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #19
                #15, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_output)

                SubscribeSubject RawRigSchema => #21
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #23
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #25
                #21, #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_input, Extension=json)

                SubscribeSubject RawSessionSchema => #27
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #29
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #31
                #27, #29, #31 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_input, Extension=json)

                SubscribeSubject RawTaskLogicSchema => #33
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #35
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #37
                #33, #35, #37 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_input, Extension=json)

            GroupWorkflow Logs
                SubscribeSubject EndExperiment
                -> StringProperty(Value=ExperimentCompleted)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
                SubscribeSubject HarpTimestampSource => #3
                #2, #3 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
                -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #7
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #9
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #11
                #7, #9, #11 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=endsession)

                SubscribeSubject RuntimeLogging
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
                SubscribeSubject HarpTimestampSource
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
                #14, #16 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                SubscribeSubject DeviceName => #22
                StringProperty(Value=RuntimeLogging)
                -> Take(Count=1) => #24
                #22, #24 -> Zip
                -> Format(Format={0}/{1}, Selector="Item1,Item2")
                -> PropertyMapping(LoggerName) => #27
                #19, #21, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=RuntimeLogging, SubjectName=LoggingRootPath, Modality=nil)

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow TriggeredCameras
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #2
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindTelekinesisDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindTelekinesisDataSchema.Rig.VideoWriterFfmpeg>) => #5
            #2 -> MemberSelector(Selector=Key) => #6
            #5, #6 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #12
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #14
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #17
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #19
                SubscribeSubject ThisWriter
                -> PropertyMapping(OutputArguments(Selector=OutputArguments), InputArguments(Selector=InputArguments), FrameRate(Selector=FrameRate)) => #21
                #12, #14, #17, #19, #21 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full" -c:v h264_nvenc -pix_fmt nv12 -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace rgb -color_primaries bt709 -color_trc linear"
                  Verbosity=Verbose
                  FrameRate=0
            -> Merge

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #12
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindTelekinesisDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindTelekinesisDataSchema.Rig.VideoWriterOpenCv>) => #15
            #12 -> MemberSelector(Selector=Key) => #16
            #15, #16 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge => #12
                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #14
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #17
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #19
                SubscribeSubject ThisWriter
                -> PropertyMapping(FrameRate(Selector=FrameRate), FourCC(Selector=FourCc)) => #21
                #12, #14, #17, #19, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSpinnakerOpenCv.bonsai, Modality=BehaviorVideos, LogName=FaceCamera, VideoExtension=mp4, FrameRate=30, FourCC=FMP4)
            -> Merge
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #16
#14, #16 -> TakeUntil => #17
SubscribeSubject StartLogging => #18
#17, #18 -> SubscribeWhen

GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    GroupWorkflow LauncherControl
        IncludeWorkflow(Path=Extensions\Annotation.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
        -> PublishSubject StartExperimentToggleButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
        -> PublishSubject EndExperimentButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
        #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 26pt"
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject StartExperimentToggleButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut

        SubscribeSubject EndExperimentButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject EndExperiment => #20
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
    GroupWorkflow ValveGui
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
        Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
        -> PublishSubject RunCalibration
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        BooleanProperty(Value=false)
        -> Take(Count=1) => #6
        SubscribeSubject ValveFlushState => #7
        #6, #7 -> Concat => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Close Valves") => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Open Valves") => #13
        #10, #13 -> Merge
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
        -> MulticastSubject ValveFlushState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #20
        #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject RunCalibration
        -> Take(Count=1) => #24
        ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
        #24, #25 -> SelectMany LoopValve
            ExternalizedMapping(DueTime(DisplayName=Interval))
            -> Timer(DueTime=PT0.5S, Period=PT0S) => #1
            ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
            #1, #2 -> IntProperty(Value=100)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve => #6
            ExternalizedMapping(Count(DisplayName=Repeats)) => #7
            #6, #7 -> RepeatCount(Count=200) => #8
            Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=true) => #9
            #8, #9 -> TakeUntil
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> WorkflowOutput
        -> Repeat

        BehaviorSubject<System.Boolean> ValveFlushState
        -> CreateObservable Flush
            WorkflowInput Source1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=200)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve
            -> Delay(DueTime=PT0.2S)
            -> RepeatCount(Count=20)
            -> LastOrDefault
            -> WorkflowOutput
        -> Switch
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #9
    GroupWorkflow HwShortcuts
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject AudioTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerLoadCellCalibration(Enabled=true, Visible=true, Text=TriggerLoadCellCalibration)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject CalibrateLoadCells
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #12
        SubscribeSubject SkipOphysInterfaceHandshake
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Label Button"
          Expression: it? "Ophys Disabled" : "Ophys Enabled"
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ButtonBuilder SkipOphysInterfaceHandshake(Enabled=true, Visible=true, Text="")
        -> Sink Override
            WorkflowInput Source1
            -> SelectMany
                SubscribeSubject SkipOphysInterfaceHandshake
                -> Take(Count=1)
                -> BitwiseNot
                -> MulticastSubject SkipOphysInterfaceHandshake
                -> WorkflowOutput
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #18
        #4, #7, #12, #18 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

        SubscribeSubject ForceReward => #21
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #24
        #21, #24 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    #5, #7, #9, #11 -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> WorkflowOutput

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

GroupWorkflow Visualizers
    GroupWorkflow TrialVisualizer
        SubscribeSubject CurrentActionVector
        -> Slice(Start=0, Step=25, Stop=nil)
        -> MemberSelector(Selector="Value.LookUpIndex.Action0,Value.LookUpIndex.Action1")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Action0, double.IsNaN(Item2) ? 0 : Item2 as Action1)
        -> InputMapping(X(Selector=Action0), Y(Selector=Action1))
        -> Bonsai.Vision.CreatePoint2f(X=0, Y=0) => #5
        SubscribeSubject CurrentLut
        -> Bonsai.Vision.ConvertToImage => #7
        #5, #7 -> WithLatestFrom => #8
        -> MemberSelector(Selector=Item1)
        -> VisualizerMapping => #10
        #8, #10 -> MemberSelector(Selector=Item2)
        -> VisualizerMapping => #12
        SubscribeSubject CurrentActionVector
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector="Value.ActionVector.Action0,Value.ActionVector.Action1"
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=Left, Color=Blue), CurveConfiguration(Label=Right, Color=Red))
          Capacity=2000
          Min=nil
          Max=nil
        -> VisualizerMapping => #15
        SubscribeSubject LiveHarvestOutcome
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Item1.Seconds
          ValueSelector="Item1.Value,Item2.UpperActionThreshold,Item2.LowerActionThreshold"
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=Left, Color=Blue), CurveConfiguration(Color=Black), CurveConfiguration(Color=Black))
          Capacity=2000
          Min=nil
          Max=nil
        -> VisualizerMapping => #18
        #12, #15, #18 -> Bonsai.Gui.TableLayoutPanelBuilder ActionVisualization(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping => #1
    SubscribeSubject SoftwareEvents
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder SoftwareEvents(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #5
    #1, #5 -> Bonsai.Gui.TableLayoutPanelBuilder TaskVisualization
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.4), RowStyle(SizeType=Percent, Height=0.4), RowStyle(SizeType=Percent, Height=0.2))
      CellSpans=""
    -> VisualizerMapping => #7
    SubscribeSubject TriggeredCamerasStream
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core.Design:SpinnakerCameraControllerVisualizer.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #10
    GroupWorkflow ActionInputs
        GroupWorkflow LoadCells
            SubscribeSubject RawLoadCellData
            -> MemberSelector(Selector=Value)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #2
            SubscribeSubject CalibratedLoadCellData
            -> MemberSelector(Selector=Value)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #5
            SubscribeSubject EnableExperimentUI
            -> PropertyMapping(Enabled) => #7
            SubscribeSubject CalibratingLoadCells
            -> Bonsai.Scripting.Expressions.ExpressionTransform Prompt
              Expression: it ? "Calibrating..." : "Calibrate Load Cells"
            -> PropertyMapping(Text) => #10
            #7, #10 -> Bonsai.Gui.ButtonBuilder TriggerLoadCellCalibration(Enabled=true, Visible=true, Text=TriggerLoadCellCalibration)
            -> Sink
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject CalibrateLoadCells
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #13
            #2, #5, #13 -> Bonsai.Gui.TableLayoutPanelBuilder RawLoadCells(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        GroupWorkflow AnalogInput
            SubscribeSubject AnalogInputData
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector="Value.Item1,Value.Item2", SymbolType=None, LineWidth=3, CurveSettings="", Capacity=5000, Min=0, Max=4096)
            -> VisualizerMapping
            -> Bonsai.Gui.TableLayoutPanelBuilder AnalogInputData(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #3
        #1, #3 -> Bonsai.Gui.TabControlBuilder ActionInputs(Enabled=true, Visible=true)
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TabControlVisualizer>) => #12
    IntProperty(Value=0)
    -> Visualizer OphysInterfaceVisualizer
        SubscribeSubject StartOphysInterface
        -> BooleanProperty(Value=false) => #1
        -> BitwiseNot
        -> Delay(DueTime=PT0.1S) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject HarpTimestampSource => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=StartTrigger, Color=#00C000))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #9
        SubscribeSubject StopOphysInterface
        -> BooleanProperty(Value=false) => #11
        -> BitwiseNot
        -> Delay(DueTime=PT0.1S) => #13
        #11, #13 -> Merge => #14
        SubscribeSubject HarpTimestampSource => #15
        #14, #15 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=StopTrigger, Color=Red))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #19
        SubscribeSubject IsReadyOphysInterface => #20
        SubscribeSubject HarpTimestampSource => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=IsArmed, Color=#8080FF))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #25
        SubscribeSubject OphysFrameStrobe
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=1
          CurveSettings(CurveConfiguration(Label=FrameStrobe, Color=#E0E0E0))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #28
        #9, #19, #25, #28 -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder OphysInterfaceState(ReverseX=false, ReverseY=false, Span=30, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=nil, Max=nil)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder OphysInterface(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #15
    #7, #10, #12, #15 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
    -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TriggeredCamerasReady => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Delay(DueTime=PT3S)
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    WorkflowInput Source1
    -> WorkflowOutput
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
